PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Leg_pattern
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Вам будут продемонстрированы стимулы.
        Во время показа видео Вам не следует повторять движение.
        Когда увидете сообщение "Приготовьтесь...", подготовьтесь к повторению движения в соответствие с указанными командами.

        Нажмите "пробел" для продолжения
    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent import_libs
      Code Type = Py
      Before Experiment:
        # Run 'Before Experiment' code from LSL_server
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('MyMarkerStream', 'Events', 1, 0, 'string', 'id43536');
        outlet = StreamOutlet(info)
  Routine Task
    MovieComponent Stimuli
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $video
      size = (1.5,1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    TextComponent Stimuli_Instruction
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $mvmnt
  Routine Movement
    TextComponent Task_actual
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $task
    CodeComponent Markers
      Code Type = Py
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      Begin Routine:
        '''
        PYLSL part
        '''
        #outlet.push_sample(f'{stimuli_id}')
  Routine ManyThanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Сообщите сотруднику о том, что эксперимент завершён

        Спасибо

        Нажмите "пробел" для выхода из приложения
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Приготовьтесь...
  Routine Ready
    TextComponent Ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = Приготовьтесь
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Flow
  Routine Instructions
  LoopInitiator Block loopType="TrialHandler"
    conditionsFile = Movement.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{'stimuli_id': 1, 'mvmnt': 'Сгибание стопы', 'video': 'ForOperating\\video\\ForwBackw_1.mp4', 'task': 'Совершите движение'},
      {'stimuli_id': 2, 'mvmnt': 'Сгибание колена', 'video': 'ForOperating\\video\\Kneel_1.mp4', 'task': 'Совершите движение'},
      {'stimuli_id': 3, 'mvmnt': 'Поворот стопы', 'video': 'ForOperating\\video\\FlexDorflex.mp4', 'task': 'Совершите движение'},
      {'stimuli_id': 4, 'mvmnt': 'Движение пальцев', 'video': 'ForOperating\\video\\Fingers.mp4', 'task': 'Совершите движение'},
      {'stimuli_id': 5, 'mvmnt': 'В покое', 'video': 'ForOperating\\video\\Neutr.mp4', 'task': 'Расслабьтесь'}]
    Routine Ready
    Routine Task
    Routine Ready
    Routine Movement
  LoopTerminator Block
  Routine ManyThanks
